CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|C:\\Users\\Deena\\Dropbox (MIT)\\UROPs\\UROP_images\\Jacky\\Training\\artifacts_removed
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):Colony
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:masked
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    Rescale intensities?:Yes

ApplyThreshold:[module_num:2|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
    Select the input image:masked
    Name the output image:ThreshBlue
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Otsu Global
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    Lower and upper bounds on threshold:0,1.0
    Threshold correction factor:7
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyPrimaryObjects:[module_num:3|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
    Select the input image:ThreshBlue
    Name the primary objects to be identified:cells
    Typical diameter of objects, in pixel units (Min,Max):15,1000000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Binary image
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    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Yes
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    Select binary image:ThreshBlue
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:1000000
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
ExpandOrShrinkObjects:[module_num:4|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
    Select the input objects:cells
    Name the output objects:expanded_cells
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:7
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    Retain the outlines of the identified objects for use later in the pipeline (for example, in SaveImages)?:No
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
MeasureImageAreaOccupied:[module_num:5|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:expanded_cells
    Retain a binary image of the object regions?:Yes
    Name the output binary image:Stain
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
ReassignObjectNumbers:[module_num:6|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
    Select the input objects:expanded_cells
    Name the new objects:RelabeledCells
    Operation to perform:Split
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
SaveImages:[module_num:7|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
    Select the type of image to save:Objects
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    Select the objects to save:RelabeledCells
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    Select method for constructing file names:From image filename
    Select image name for file prefix:masked
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    Do you want to add a suffix to the image file name?:No
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    Select file format to use:jpeg
    Output file location:Default Output Folder|C:\\\\Users\\\\Deena\\\\Google Drive\\\\Chemomechanics_Lab_Temp\\\\temp_image_processing\\\\Prelim_5_Spot_11\\\\Spot 1\\\\Montaged\\\\tracked_9_10_14
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Color
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:Stain
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    Select method for constructing file names:From image filename
    Select image name for file prefix:masked
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:_binary
    Select file format to use:bmp
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No
