CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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notes:['load seeded image (white dots on identified_objects image)']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|C:\\Users\\Deena\\Dropbox (MIT)\\UROPs\\UROP_images\\Jacky\\Training\\artifacts_removed
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):Colony
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:seeded
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    Rescale intensities?:Yes

ColorToGray:[module_num:2|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notes:['converts color image to grayscale']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
    Select the input image:seeded
    Conversion method:Combine
    Image type::RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1
    Relative weight of the green channel:1
    Relative weight of the blue channel:1
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
ApplyThreshold:[module_num:3|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notes:['converts grayscale to binary (only seeds/"nuclei" remain in image)']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
    Select the input image:OrigGray
    Name the output image:seedsonly
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.95
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
ConserveMemory:[module_num:4|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
    Specify which images?:Images to keep
    Select image to keep:seedsonly
    Select image to keep:OrigGray

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:seedsonly
    Name the primary objects to be identified:seeds
    Typical diameter of objects, in pixel units (Min,Max):10,1000000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.1,1.0
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    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:No
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    Retain outlines of the identified objects?:No
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:10000000
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:seeds
    Name the objects to be identified:cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:OrigGray
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.1,1.0
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Discard secondary objects that touch the edge of the image?:No
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    Fill holes in identified objects?:Yes

ExpandOrShrinkObjects:[module_num:7|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notes:['the original segmentation pipeline (up to v3) did not have expand module. when overlaying the outline, tiny fragments of the cell would get split off because the outline is overlayed on inside of object (thereby systematically shrinking all cells AND potentially creating artifacts)']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
    Select the input objects:cells
    Name the output objects:Expanded cell
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
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    Retain the outlines of the identified objects for use later in the pipeline (for example, in SaveImages)?:Yes
    Name the outline image:expandedcelloutline

ConvertObjectsToImage:[module_num:8|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notes:['select cells, NOT expanded cells. we want to overlay our expanded cell outline onto our original cell images so that cells dont get shrunken']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
    Select the input objects:cells
    Name the output image:CellImage
    Select the color type:Color
    Select the colormap:Default

OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CellImage
    Name the output image:OrigOverlay
    Select outline display mode:Color
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    Width of outlines:5
    Select outlines to display:expandedcelloutline
    Select outline color:Black

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:seeded
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    Do you want to add a suffix to the image file name?:No
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    Select file format to use:png
    Output file location:Default Output Folder|C:\\\\Users\\\\Deena\\\\Google Drive\\\\Chemomechanics_Lab_Temp\\\\temp_image_processing\\\\Prelim_5_Spot_11\\\\Spot 1\\\\Montaged\\\\tracked_9_10_14
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Select colormap:Dark2
    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No
