CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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notes:['This version (v4) was created to analyze several distances to consider objects touching.  Unlike v3, it does not  saving images for that purpose (number of neighbors, percent touching).', '(11/11/15)']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|C:\\Users\\Deena\\Dropbox (MIT)\\UROPs\\UROP_images\\Jacky\\Training\\artifacts_removed
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):Colony
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:masked
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    Rescale intensities?:Yes

ColorToGray:[module_num:2|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
    Select the input image:masked
    Conversion method:Combine
    Image type::RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1
    Relative weight of the green channel:1
    Relative weight of the blue channel:1
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
ApplyThreshold:[module_num:3|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
    Select the input image:OrigGray
    Name the output image:ThreshBlue
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Otsu Global
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    Lower and upper bounds on threshold:0.1,1.0
    Threshold correction factor:1
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyPrimaryObjects:[module_num:4|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
    Select the input image:ThreshBlue
    Name the primary objects to be identified:cells
    Typical diameter of objects, in pixel units (Min,Max):10,1000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Binary image
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    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Yes
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    Select binary image:ThreshBlue
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Truncate
    Maximum number of objects:1000000000
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
ReassignObjectNumbers:[module_num:5|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
    Select the input objects:cells
    Name the new objects:RelabeledCells
    Operation to perform:Split
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
TrackObjects:[module_num:6|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
    Choose a tracking method:Overlap
    Select the objects to track:RelabeledCells
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    Maximum pixel distance to consider matches:50
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
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
SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:TrackedCells
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    Select method for constructing file names:From image filename
    Select image name for file prefix:masked
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    Do you want to add a suffix to the image file name?:No
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    Select file format to use:jpeg
    Output file location:Default Output Folder|C:\\\\Users\\\\Deena\\\\Google Drive\\\\Chemomechanics_Lab_Temp\\\\temp_image_processing\\\\Prelim_5_Spot_11\\\\Spot 1\\\\Montaged\\\\tracked_9_10_14
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Select colormap:Dark2
    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

MeasureImageAreaOccupied:[module_num:8|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
    Hidden:2
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:RelabeledCells
    Retain a binary image of the object regions?:Objects
    Name the output binary image:RelabeledCells
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:cells
    Retain a binary image of the object regions?:Stain
    Name the output binary image:masked
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
MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:RelabeledCells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Retain the image of objects colored by numbers of neighbors for use later in the pipeline (for example, in SaveImages)?:No
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    Retain the image of objects colored by percent of touching pixels for use later in the pipeline (for example, in SaveImages)?:No
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
MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:RelabeledCells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:10
    Retain the image of objects colored by numbers of neighbors for use later in the pipeline (for example, in SaveImages)?:No
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    Retain the image of objects colored by percent of touching pixels for use later in the pipeline (for example, in SaveImages)?:No
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
MeasureObjectNeighbors:[module_num:11|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
    Select objects to measure:RelabeledCells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:15
    Retain the image of objects colored by numbers of neighbors for use later in the pipeline (for example, in SaveImages)?:No
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    Retain the image of objects colored by percent of touching pixels for use later in the pipeline (for example, in SaveImages)?:No
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
MeasureObjectNeighbors:[module_num:12|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
    Select objects to measure:RelabeledCells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Retain the image of objects colored by numbers of neighbors for use later in the pipeline (for example, in SaveImages)?:No
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    Retain the image of objects colored by percent of touching pixels for use later in the pipeline (for example, in SaveImages)?:No
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
MeasureObjectSizeShape:[module_num:13|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
    Select objects to measure:RelabeledCells
    Calculate the Zernike features?:Yes

ConvertObjectsToImage:[module_num:14|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
    Select the input objects:RelabeledCells
    Name the output image:CellImage
    Select the color type:uint16
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:CellImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:masked
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:ID
    Select file format to use:mat
    Output file location:Default Output Folder sub-folder|IDs
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Select colormap:Dark2
    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes

DisplayDataOnImage:[module_num:16|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
    Display object or image measurements?:Object
    Select the input objects:RelabeledCells
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:TrackedCells
    Text color:white
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):15
    Number of decimals:0
    Image elements to save:Image

SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:masked
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    Do you want to add a suffix to the image file name?:No
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    Select file format to use:jpeg
    Output file location:Default Output Folder sub-folder|object_numbers
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Select colormap:Dark2
    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
